CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<DateImaged>[0-9]{8})_(?P<DateExp>[0-9]{8})_(?P<Genotype>[A-Za-z0-9]+)_(?P<Condition>[A-Za-z0-9]+)_(?P<Magnification>[0-9]+x)_(?P<Treatment>[0-9]+(?:ug|ng)LPS|VehLPS)_(?P<Well>[0-9]+)(?P<Site>[A-Za-z]+)_(?P<Location>XY[0-9]+_Z[0-9]+_T[0-9]+)_(?P<Channel>C[0-9]+)\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C0")
    Name to assign these images:Nucleus
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:Cytoplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:BODIPY
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nucleus
    Name the primary objects to be identified:Nucleus
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Change threshold smoothing to smooth image before threshold is applied. ', 'Change threshold correction factor to make the outlines less stringent ']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
    Select the input objects:Nucleus
    Name the objects to be identified:Phalloidin
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cytoplasm
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Phalloidin
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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
    Select the objects to filter:Phalloidin
    Name the output objects:PhSizeFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:700
    Filter using a maximum measurement value?:Yes
    Maximum value:100000
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:BODIPY
    Name the primary objects to be identified:BODIPY
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:BODIPY
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MaskObjects:[module_num:11|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
    Select objects to be masked:Nucleus
    Name the masked objects:NucMask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nucleus
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:12|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
    Select objects to be masked:PhSizeFiltered
    Name the masked objects:PhFilterMask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PhSizeFiltered
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:BODIPY
    Name the masked objects:BODIPYMask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:BODIPY
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:PhFilterMask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:15|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
    Parent objects:PhFilterMask
    Child objects:BODIPYMask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:BODIPYPhRelate
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
MaskObjects:[module_num:16|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
    Select objects to be masked:BODIPYPhRelate
    Name the masked objects:BODIPYPhRelateMask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:PhFilterMask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:17|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
    Select object sets to measure:BODIPYPhRelateMask
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:18|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
    Parent objects:PhFilterMask
    Child objects:BODIPYPhRelateMask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:19|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
    Name the output measurement:TotalBODIPYArea
    Operation:Multiply
    Select the first operand measurement type:Object
    Select the first operand objects:PhFilterMask
    Select the first operand measurement:Children_BODIPYPhRelateMask_Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Object
    Select the second operand objects:PhFilterMask
    Select the second operand measurement:Mean_BODIPYPhRelateMask_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:20|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
    Name the output measurement:PercentAreaBODIPY
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:PhFilterMask
    Select the numerator measurement:Math_TotalBODIPYArea
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:PhFilterMask
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:Yes
    Enter the upper bound:100

ConvertObjectsToImage:[module_num:21|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
    Select the input objects:NucMask
    Name the output image:NucMask
    Select the color format:Color
    Select the colormap:summer

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:BODIPYPhRelateMask
    Name the output image:BODIPYPhRelateMask
    Select the color format:Color
    Select the colormap:spring

ConvertObjectsToImage:[module_num:23|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
    Select the input objects:PhFilterMask
    Name the output image:PhMask
    Select the color format:Color
    Select the colormap:cool

OverlayObjects:[module_num:24|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
    Input:BODIPYPhRelateMask
    Name the output image:BODIPYPhRelateMaskwithOverlay
    Objects:PhFilterMask
    Opacity:0.25

DisplayDataOnImage:[module_num:25|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
    Display object or image measurements?:Object
    Select the input objects:NucMask
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:NucMask
    Text color:red
    Name the output image that has the measurements displayed:NucMaskLabeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:bold

DisplayDataOnImage:[module_num:26|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
    Display object or image measurements?:Object
    Select the input objects:PhFilterMask
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:PhMask
    Text color:red
    Name the output image that has the measurements displayed:PhMaskLabeled
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:bold

DisplayDataOnImage:[module_num:27|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
    Display object or image measurements?:Object
    Select the input objects:PhFilterMask
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:BODIPYPhRelateMaskwithOverlay
    Text color:red
    Name the output image that has the measurements displayed:BODIPYPhRelateMask_PhLabel
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:bold

DisplayDataOnImage:[module_num:28|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
    Display object or image measurements?:Object
    Select the input objects:BODIPYPhRelateMask
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:BODIPYPhRelateMaskwithOverlay
    Text color:red
    Name the output image that has the measurements displayed:BODIPYPhRelateMask_BODIPYLabel
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:.Aqua Kana
    Use scientific notation?:No
    Font weight:bold

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/SOM/ENDO/ENDO/KDBLab/Annalise/Data/In Vitro/Primaries/20260618 WT pMG FSvFZ Revisions FZ IBA1 and AB/20260715_20260714_WTpMG_FZs1_LPS/20260810_CP_Analysis/Measurements
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_MaxFeretDiameter,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_Center_X,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_Center_Y,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_MaximumRadius,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_Orientation,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_BoundingBoxArea,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_ConvexArea,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_Compactness,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_Perimeter,PhFilterMask|Mean_BODIPYPhRelateMask_AreaShape_MajorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:20260810_
    Overwrite existing files without warning?:No

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:BODIPYPhRelateMask_BODIPYLabel
    Select method for constructing file names:Single name
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    Enter single file name:20260810_\g<DateExp>_\g<Condition>_\g<Treatment>_\g<Well>\g<Site>_BODIPYPhRelateMask_BODIPYLabel
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/SOM/ENDO/ENDO/KDBLab/Annalise/Data/In Vitro/Primaries/20260618 WT pMG FSvFZ Revisions FZ IBA1 and AB/20260715_20260714_WTpMG_FZs1_LPS/20260810_CP_Analysis/Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:BODIPYPhRelateMask_PhLabel
    Select method for constructing file names:Single name
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    Enter single file name:20260810_\g<DateExp>_\g<Condition>_\g<Treatment>_\g<Well>\g<Site>_BODIPYPhRelateMask_PhLabel
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/SOM/ENDO/ENDO/KDBLab/Annalise/Data/In Vitro/Primaries/20260618 WT pMG FSvFZ Revisions FZ IBA1 and AB/20260715_20260714_WTpMG_FZs1_LPS/20260810_CP_Analysis/Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:NucMaskLabeled
    Select method for constructing file names:Single name
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    Enter single file name:20260810_\g<DateExp>_\g<Condition>_\g<Treatment>_\g<Well>\g<Site>_NucMask
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/SOM/ENDO/ENDO/KDBLab/Annalise/Data/In Vitro/Primaries/20260618 WT pMG FSvFZ Revisions FZ IBA1 and AB/20260715_20260714_WTpMG_FZs1_LPS/20260810_CP_Analysis/Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:PhMaskLabeled
    Select method for constructing file names:Single name
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    Enter single file name:20260810_\g<DateExp>_\g<Condition>_\g<Treatment>_\g<Well>\g<Site>_PhMask
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    Saved file format:tiff
    Output file location:Elsewhere...|/Volumes/SOM/ENDO/ENDO/KDBLab/Annalise/Data/In Vitro/Primaries/20260618 WT pMG FSvFZ Revisions FZ IBA1 and AB/20260715_20260714_WTpMG_FZs1_LPS/20260810_CP_Analysis/Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
